<?xml version='1.0' encoding='UTF-8'?>
<model name="NFAT_Cytokine" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="second"/>
    </component>
    <component name="NFAT_cytokine">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="NFATN_n" public_interface="in" units="uM"/>
        <variable name="J_NFATNn" public_interface="in" units="uM_per_s"/>
        <variable name="J8" units="uM_per_s"/>
        <variable name="J10" units="uM_per_s"/>
        <variable initial_value="0.1" name="k_f8" public_interface="out" units="per_s"/>
        <variable initial_value="23.0" name="k_f9" public_interface="out" units="per_s"/>
        <variable initial_value="0" name="IFN" public_interface="out" units="uM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J8</ci>
                <apply>
                    <times/>
                    <ci>k_f8</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J10</ci>
                <apply>
                    <times/>
                    <ci>k_f10</ci>
                    <ci>IFN</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATN_n</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J_NFATNn</ci>
                    <ci>J8</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>IFN</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J8</ci>
                    <ci>J10</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
