<?xml version='1.0' encoding='UTF-8'?>
<model name="KIR2DL4_HLAg" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***                  U N I T S                      ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
*** C O M P O N E N T S ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="KIR2DL4_HLAg">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="J_HLADL4" public_interface="out" units="uM_per_s"/>
        <variable initial_value="0.02" name="k_f1" public_interface="out" units="per_uM_per_s"/>
        <variable initial_value="0.02" name="k_r1" public_interface="out" units="per_s"/>
        <variable initial_value="0.1052" name="HLA" public_interface="out" units="uM"/>
        <variable initial_value="0.1" name="DL4" units="uM"/>
        <variable initial_value="0" name="HLADL4" public_interface="out" units="uM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J_HLADL4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>DL4</ci>
                        <ci>HLA</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>HLADL4</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>HLA</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J_HLADL4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>DL4</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J_HLADL4</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="KIR2DL4_HLAg" component_2="environment"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
