<?xml version='1.0' encoding='UTF-8'?>
<model name="PI3K" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***                  U N I T S                      ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
*** C O M P O N E N T S ***
*********************************************************
-->
    <component name="PI3K">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="J7" units="uM_per_s"/>
        <variable name="J8" public_interface="out" units="uM_per_s"/>
        <variable name="J9" public_interface="in" units="uM_per_s"/>
        <variable name="pGrb2" public_interface="in" units="uM"/>
        <variable initial_value="0.01" name="PI3K" units="uM"/>
        <variable initial_value="0" name="PI3Kstar" public_interface="out" units="uM"/>
        <variable initial_value="0" name="pGrb2PI3K" units="uM"/>
        <variable initial_value="7.5" name="k_f7" units="per_uM_per_s"/>
        <variable initial_value="0.005" name="k_r8" units="per_s"/>
        <variable initial_value="10.1" name="k_f9" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f7</ci>
                        <ci>pGrb2</ci>
                        <ci>PI3K</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r8</ci>
                        <ci>pGrb2PI3K</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J8</ci>
                <apply>
                    <times/>
                    <ci>k_f8</ci>
                    <ci>pGrb2PI3K</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J7</ci>
                        <ci>J8</ci>
                    </apply>
                    <ci>J9</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3K</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J8</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2PI3K</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J8</ci>
                    <ci>J9</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3Kstar</ci>
                </apply>
                <ci>J9</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="PI3K" component_2="environment"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
